PsychoPy2experiment version="2024.3.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = keyMonkeyDemo
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor [set every repeat] = $(normal(0, 0.5), -1, normal(0, 0.5))
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent colorAns
      allowedKeys = 'r', 'b'
      correctAns = $'r' if polygon.fillColor[0] > polygon.fillColor[2] else 'b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextboxComponent instRecap
      anchor = bottom-center
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.5)
      size = (0.8, 0.2)
      startVal [time (s)] = 0.0
      text = Remember: R for more red, B for more blue.
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    KeyboardMonkeyComponent colorAnsMonkey plugin="psychopy-monkeys"
      comp = colorAns
      pressKey = $randchoice(['r', 'b'])
      pressMode = both
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.1
      syncScreenRefresh = False
  Routine instr
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    TextboxComponent instrText
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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      text:
        You're about to be shown a series of circles of varying colour. For each one, press R if you think it's more red than blue, or press B if you think it's more blue than red.

        Press SPACE to begin.
    KeyboardComponent instrProg
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thx
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    TextboxComponent thxtext
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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      text:
        Thank you for taking part! Hopefully it wasn't too tedious. If you ran in pilot mode, it shouldn't have been ;)

        Press SPACE to finish.
    KeyboardComponent thxProg
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine iti
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    PolygonComponent fixCross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    RoutineEnderMonkeyComponent fixEnder plugin="psychopy-monkeys"
      forceEndRoutine = True
      saveStartStop = False
      showCountdown = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0
      syncScreenRefresh = False
  Routine feedback
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    TextboxComponent fbText
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $"Correct!" if colorAns.corr else "Wrong!"
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    RoutineEnderMonkeyComponent fbEnder plugin="psychopy-monkeys"
      forceEndRoutine = True
      saveStartStop = False
      showCountdown = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0
      syncScreenRefresh = False
Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine iti
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine thx
